
<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>1000000</Steps>
      <Temperature>20.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Stem"/>
      <CellType TypeId="2" TypeName="Differentiated"/>
   </Plugin>
   
   <!--
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">20.0</Energy>
      <Energy Type1="Medium" Type2="Stem">20.0</Energy>
      <Energy Type1="Medium" Type2="Differentiated">20.0</Energy>
      <Energy Type1="Stem" Type2="Stem">15.0</Energy>
      <Energy Type1="Stem" Type2="Differentiated">15.0</Energy>
      <Energy Type1="Differentiated" Type2="Differentiated">15.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   -->
   
   <Plugin Name="Volume">
   </Plugin>
   
   <Plugin Name="CenterOfMass">
   </Plugin>
   
   
   <Plugin Name="AdhesionFlex">
   
   <!-- Specification of adhesion energies as a function of cadherin concentration at cell membranes -->
   <!-- Adhesion energy is a function of two cells in ocntact. the functional form is specified by the user -->
   <AdhesionMolecule Molecule="cadherin"/>
   <AdhesionMolecule Molecule="integrin"/>
   <AdhesionMolecule Molecule="FN"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0" Molecule="cadherin"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0.0" Molecule="integrin"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="16.1" Molecule="FN"/>
   <AdhesionMoleculeDensity CellType="Stem" Density="10.1" Molecule="cadherin"/>
   <AdhesionMoleculeDensity CellType="Stem" Density="8.0" Molecule="integrin"/>
   <AdhesionMoleculeDensity CellType="Differentiated" Density="10.1" Molecule="cadherin"/>
   <AdhesionMoleculeDensity CellType="Differentiated" Density="8.0" Molecule="integrin"/>
   <BindingFormula Name="Binary">
      <Formula>min(Molecule1,Molecule2)</Formula>
      <Variables>
         <AdhesionInteractionMatrix>
            <BindingParameter Molecule1="cadherin" Molecule2="cadherin">-2.</BindingParameter>
            <BindingParameter Molecule1="cadherin" Molecule2="integrin">0</BindingParameter>
            <BindingParameter Molecule1="integrin" Molecule2="FN">-2</BindingParameter>
         </AdhesionInteractionMatrix>
      </Variables>
   </BindingFormula>
   <NeighborOrder>3</NeighborOrder>
</Plugin>


   
   <Steppable Type="BlobInitializer">
      
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="50" y="50" z="0"/>
         <Radius>10</Radius>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Stem,Differentiated</Types>
      </Region>
   </Steppable>
   
   
   <Steppable Type="DiffusionSolverFE">

   <DiffusionField Name="Glu">
   
      <DiffusionData>
         <FieldName>Glu</FieldName>
         <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
         
         <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         
         <!--
         <DiffusionCoefficient CellType="Medium">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="Stem">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="Differentiated">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="Medium">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="Stem">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="Differentiated">0.0001</DecayCoefficient>
         -->
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFEall secretio nconstants are scaled automaticly to account for extra calls of the solver when handling large diffusion constants -->
        
         <Secretion Type="Medium">0.1</Secretion>
  
      </SecretionData>


   </DiffusionField>
</Steppable>


</CompuCell3D>
